PsychoPy2experiment version="2021.1.3"
Settings
  Experiment info = {'session': '002', 'participant': 'nb', '性别': '', '年龄': '', '除了中文，您还说什么语言？': '', '平日您和家人朋友交流用什么语言？': '', '您在说英语的国家生活了几年？': ''}
  Force stereo = False
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [800, 600]
  expName = OfficialXpragNb
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Routines
  Routine Blank500
    TextComponent blank
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
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  Routine codeInit
    CodeComponent code_start
      Code Type = Auto->JS
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  Routine intro
    TextComponent welcome
      font = Songti SC
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        您好！欢迎参加调查实验！

        这项实验由32个问题组成。
        每个问题由一个语境，一副图片，和一个句子组成。

        您的任务是：在指定语境下，判断所给句子是否可以真实地描述图片。
        如果可以，请选择“可以”，否则请选择“不可以”。

        点击“我同意”会出现红三角，表示您愿意参加实验。

        首先，我们开始实验前的练习。练习题目有四个，您会看到提示（蓝色）。

        请按空格键开始。
    SliderComponent Iagree
      font = Songti SC
      forceEndRoutine = False
      granularity = 1
      labels = '我同意',' '
      letterHeight = 0.05
      pos = (0, -0.8)
      size = (0.7, 0.1)
      startVal [time (s)] = 2.0
      styles = ['triangleMarker']
      ticks = (1,2)
      units = norm
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    KeyboardComponent key_space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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  Routine end
    TextComponent thanks
      font = Songti SC
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = 谢谢您的参与！
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  Routine training
    TextComponent context_0
      font = Songti SC
      letterHeight = 0.05
      pos = (-0.2, 0.8)
      startVal [time (s)] = 0.0
      text [set every repeat] = $context_t
      units = norm
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    ImageComponent referent_0
      image [set every repeat] = $pic_meaning_t
      pos = (0, 0.3)
      size = (0.7, 0.9)
      startVal [time (s)] = 1.0
      units = norm
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    TextComponent utterance_0
      font = Songti SC
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 3.0
      text [set every repeat] = $utterance_t
      units = norm
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    TextComponent feedback_0
      color = blue
      font = Songti SC
      letterHeight = 0.055
      pos = (0, -0.4)
      startVal [time (s)] = 7.0
      text [set every repeat] = $feedback_t
      units = norm
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    SliderComponent true_can_0
      font = Songti SC
      forceEndRoutine = False
      granularity = 1
      labels = '不可以真实描述图片','可以真实描述图片'
      letterHeight = 0.05
      pos = (0, -0.6)
      size = (0.7, 0.1)
      startVal [time (s)] = 3.0
      styles = ['rating']
      ticks = (0,1)
      units = norm
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    TextComponent explain_0
      color = blue
      font = Songti SC
      letterHeight = 0.05
      pos = (0, -0.9)
      startVal [time (s)] = 9.0
      text = 练习帮您了解语言中的歧义现象。点击“不可以”或“可以”会出现红点。按空格进入下题。一旦按下空格键，您将无法回到上一题！
      units = norm
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    KeyboardComponent nextPractice
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 9.0
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  Routine codeTraining
    CodeComponent code_training
      Code Type = Auto->JS
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  Routine PresstoStart
    TextComponent pressme
      font = Songti SC
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = 现在我们进入正式的实验！请按空格键。
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine exp
    TextComponent context_1
      font = Songti SC
      letterHeight = 0.06
      pos = (-0.1, 0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $context
      units = norm
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    ImageComponent referent_1
      image [set every repeat] = $pic_meaning
      size = (0.7, 0.9)
      startVal [time (s)] = 0.0
      texture resolution = 256
      units = norm
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    TextComponent utterance_1
      font = Songti SC
      letterHeight = 0.06
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $utterance
      units = norm
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    SliderComponent true_can_1
      font = Songti SC
      forceEndRoutine = False
      granularity = 1
      labels = '不可以真实描述图片','可以真实描述图片'
      letterHeight = 0.05
      pos = (0, -0.8)
      size = (0.7, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (0,1)
      units = norm
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    TextComponent intruct_1
      color = blue
      font = Songti SC
      letterHeight = 0.045
      pos = (0, -0.85)
      startVal [time (s)] = 5.0
      text = 按空格建进入下一题。一旦按下空格键，您将无法回到上一题！
      units = norm
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    KeyboardComponent testDone
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
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  Routine expfirst3
Flow
  Routine intro
  Routine Blank500
  LoopInitiator trialsTraining loopType="TrialHandler"
    conditionsFile = training_stim.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('context_t', '语境：男生让女生选择吃什么。除了门口的黑板，手机上也可以查到菜单。'), ('pic_meaning_t', 'trainingImg/amb2.png'), ('utterance_t', '句子：“男生正在等待女生， 手里握着一个手机。”'), ('feedback_t', '“手里握着手机”的可指“男生”，也可指“女生”。图片中确实有握着手机的男生。句子可以真实描述图片。'), ('predicted_t', 1), ('true_how_t', 'possibly')]),
      OrderedDict([('context_t', '语境：男生让女生选择吃什么。除了门口的黑板，手机上也可以查到菜单。'), ('pic_meaning_t', 'trainingImg/amb1.png'), ('utterance_t', '句子：“男生正在等待女生， 手里握着一个手机。”'), ('feedback_t', '“手里握着手机”的可指“男生”，也可指“女生”。图片中确实有握着手机的女生。句子可以真实描述图片。'), ('predicted_t', 1), ('true_how_t', 'possibly')]),
      OrderedDict([('context_t', '语境：女生躺在病床上睡着了。一会需要清洁纸巾。'), ('pic_meaning_t', 'trainingImg/noamb1v2.png'), ('utterance_t', '句子：“男生正在等待女生， 手里握着一个手机。”'), ('feedback_t', '“手里握着手机”的可指“男生”，也可指“女生”。图片中并没有握着手机的男生/女生。句子不可以真实描述图片。'), ('predicted_t', 0), ('true_how_t', 'necessarily')]),
      OrderedDict([('context_t', '语境：女生躺在病床上睡着了。一会需要清洁纸巾。'), ('pic_meaning_t', 'trainingImg/noamb1v2.png'), ('utterance_t', '句子：“男生正在等待女生， 手里握着一张清洁纸巾。”'), ('feedback_t', '“手里握着清洁纸巾”的可指“男生”，也可指“女生”。图片中确实有握纸巾的男生。句子可以真实描述图片。'), ('predicted_t', 1), ('true_how_t', 'necessarily')])]
    Routine training
  LoopTerminator trialsTraining
  Routine PresstoStart
  LoopInitiator trialsTestLoop loopType="TrialHandler"
    Selected rows = 0:32
    conditionsFile = exp_stim_nothing.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('context', '语境：图片中的女生觉得7万算是贵的车。她想买车。'), ('pic_meaning', 'img/gui_pos.png'), ('utterance', '句子：“红车贵。”'), ('predicted', 1), ('true_how', 'possibly'), ('code', 'pos-t-comp-f-gui'), ('ling_con', 'upward')]),
      OrderedDict([('context', '语境：图片中的女生在比较三辆车的价格。她觉得50万算是贵的车。'), ('pic_meaning', 'img/gui_comp.png'), ('utterance', '句子：“这三辆车里，红车贵。”'), ('predicted', 1), ('true_how', 'possibly'), ('code', 'pos-f-comp-t-gui'), ('ling_con', 'upward')]),
      OrderedDict([('context', '语境：图片中的女生觉得2万算是贵的车。她在比较三辆车的价格。'), ('pic_meaning', 'img/gui_comp.png'), ('utterance', '句子：“红车贵。”'), ('predicted', 1), ('true_how', 'necessarily'), ('code', 'pos-t-comp-t-gui'), ('ling_con', 'upward')]),
      OrderedDict([('context', '语境：图片中的女生在比较三辆车的价格。她觉得40万算是贵的车。'), ('pic_meaning', 'img/gui_pos.png'), ('utterance', '句子：“红车贵。”'), ('predicted', 0), ('true_how', 'necessarily'), ('code', 'pos-f-comp-f-gui'), ('ling_con', 'upward')]),
      OrderedDict([('context', '语境：图片中的女生觉得7万算是贵的车。她想买车。'), ('pic_meaning', 'img/gui_eq.png'), ('utterance', '句子：“没有一辆车贵。”'), ('predicted', 1), ('true_how', 'possibly'), ('code', 'pos-t-comp-f-nothinggui'), ('ling_con', 'downward_nothing')]),
      OrderedDict([('context', '语境：图片中的女生在比较三辆车的价格。她觉得50万算是贵的车。'), ('pic_meaning', 'img/gui_comp.png'), ('utterance', '句子：“这三辆车里，没有一辆车贵。”'), ('predicted', 1), ('true_how', 'possibly'), ('code', 'pos-f-comp-t-nothinggui'), ('ling_con', 'downward_nothing')])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
    Routine exp
  LoopTerminator trialsTestLoop
  Routine Blank500
  Routine end
